PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s/%s_%s_%s' % (expInfo['participant'],expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'run': '1', 'config': 'hearing', 'enable_video': 'true', 'enable_ppg': 'false'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  clockFormat = iso
  color = -1.0000, -1.0000, -1.0000
  expName = hearing
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine welcome
    RoutineSettingsComponent welcome
      saveStartStop = False
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    CodeComponent code_init
      Code Type = Py
      Before Experiment:
        import os
        import random
        from pylsl import StreamInfo, StreamOutlet
        import socket
        from eeg_quality.recording_checks import preflight_eeg_gate, preflight_video_gate
        from psychopy import sound, core
        import yaml
        import cv2
        import signal
        import sys
        import threading
        from datetime import datetime
        import platform
        import threading
        import serial
        import csv
        import random
        import time
        import atexit
        import pandas as pd
        import re

        started_recording = False
        original_quit = core.quit
        lsl_socket, recorder, ppg_recorder, recording_thread, ppg_thread = None, None, None, None, None
        end_exp = False

        def cleanup():
            global started_recording, lsl_socket, recorder, ppg_recorder, recording_thread, ppg_thread
            print("At exit...")
            if started_recording:
                print("Performing cleanup tasks...")
                if recorder:
                    recorder.stop()
                    recording_thread.join()
                if ppg_recorder:
                    ppg_recorder.stop()
                    ppg_thread.join()
                started_recording = False

        def save_responses():
            print("Saving Response")
            processed_data_with_type = []
            participant = expInfo['participant']
            exp_date = expInfo['date']
            path = os.path.join('data',participant,f"{participant}_{expName}_{exp_date}.csv")
            d = pd.read_csv(path)

            def fmt_rt(rt):
                try:
                    return f"{float(rt):.3f}"
                except (TypeError, ValueError):
                    return ""

            def to_int_value(v):
                if v is None:
                    return ""
                if isinstance(v, str):
                    s = v.strip()
                    if s.lower() == "unclear":
                        return -1
                    if s == "":
                        return ""
                    m = re.match(r'\s*(-?\d+)', s)
                    if m:
                        return int(m.group(1))
                try:
                    f = float(v)
                    if pd.isna(f):
                        return ""
                    return int(round(f))
                except (TypeError, ValueError):
                    return ""

            def clean_name(v):
                if v is None or (isinstance(v, float) and pd.isna(v)):
                    return ""
                if isinstance(v, float) and float(v).is_integer():
                    return str(int(v))
                return str(v)

            for idx, row in d.iterrows():
                if 'current_hlt_stim' in d.columns and not pd.isna(row['current_hlt_stim']):
                    user_value = row['trials_hlt.slider_4.response'] if not pd.isna(row['trials_hlt.slider_4.response']) else None
                    user_rt = row['slider_4.rt'] if not pd.isna(row['slider_4.rt']) else None
                    processed_data_with_type.append({
                        "Stim Type": "HLT",
                        "Stim Name": clean_name(row['current_hlt_stim']),
                        "Stim Variant": "",
                        "Repeat Number": int(row['thisRepN']) + 1 if not pd.isna(row['thisRepN']) else None,
                        "User Value": to_int_value(user_value),
                        "User Response Time (s)": fmt_rt(user_rt)
                    })

                if 'current_let_stim' in d.columns and not pd.isna(row['current_let_stim']):
                    user_value = None
                    user_rt = None
                    for response_col, rt_col in [('trials_let.slider_5.response', 'slider_5.rt'),
                                                 ('trials_let.slider_6.response', 'slider_6.rt'),
                                                 ('trials_let.slider_7.response', 'slider_7.rt')]:
                        if response_col in d.columns and not pd.isna(row[response_col]):
                            user_value = row[response_col]
                            user_rt = row[rt_col] if not pd.isna(row[rt_col]) else None
                            break
                    let_level = row['current_let_level'] if 'current_let_level' in d.columns and not pd.isna(row['current_let_level']) else ""
                    processed_data_with_type.append({
                        "Stim Type": "LET",
                        "Stim Name": clean_name(row['current_let_stim']),
                        "Stim Variant": let_level,
                        "Repeat Number": int(row['thisRepN']) + 1 if not pd.isna(row['thisRepN']) else None,
                        "User Value": to_int_value(user_value),
                        "User Response Time (s)": fmt_rt(user_rt)
                    })

                if 'current_ast_stim' in d.columns and not pd.isna(row['current_ast_stim']):
                    user_value = row['trials_ast.slider_ast.response'] if 'trials_ast.slider_ast.response' in d.columns and not pd.isna(row['trials_ast.slider_ast.response']) else None
                    user_rt = row['slider_ast.rt'] if 'slider_ast.rt' in d.columns and not pd.isna(row['slider_ast.rt']) else None
                    ast_type = row['current_ast_type'] if 'current_ast_type' in d.columns and not pd.isna(row['current_ast_type']) else ""
                    processed_data_with_type.append({
                        "Stim Type": "AST",
                        "Stim Name": clean_name(row['current_ast_stim']),
                        "Stim Variant": ast_type,
                        "Repeat Number": int(row['thisRepN']) + 1 if not pd.isna(row['thisRepN']) else None,
                        "User Value": to_int_value(user_value),
                        "User Response Time (s)": fmt_rt(user_rt)
                    })

            processed_df_with_type = pd.DataFrame(processed_data_with_type)
            response_path = os.path.join(os.getcwd(),"exp_data",f"sub-{participant}",f'sub-{participant}_responses.csv')
            os.makedirs(os.path.dirname(response_path), exist_ok=True)
            processed_df_with_type.to_csv(response_path, index=False)

        def custom_quit():
            cleanup()  # Your cleanup function
            save_responses()
            original_quit()

        # Function to extract the numeric part from the filename
        def extract_number(filename):
            match = re.search(r'(\d+)', filename)
            return int(match.group(1)) if match else float('inf')

        def get_audio_files(folder):
            files = [os.path.join(folder, file) for file in os.listdir(folder) if file.endswith('.wav') or file.endswith('.mp3') or file.endswith('.ogg')]
            return sorted(files,key=extract_number)

        def get_let_levels(let_folder):
            return sorted([os.path.join(let_folder, f) for f in os.listdir(let_folder) if os.path.isdir(os.path.join(let_folder, f))], key=extract_number)

        class VideoRecorder:
            def __init__(self, cam_id=0, output_name='output', default_fps=30, display_video=False, enable_lsl=False):
                print("VideoRecorder start.")
                self.cam_id = cam_id
                self.output_path = os.path.join(os.getcwd(),"exp_data","videos",f"{output_name}.avi")
                os.makedirs(os.path.dirname(self.output_path), exist_ok=True)
                self.display_video = display_video
                self.enable_lsl = enable_lsl
                self.cap = None
                self.out = None
                self.video_outlet = None
                self.default_fps = default_fps
                self.stop_event = threading.Event()
                if self.enable_lsl:
                    info = StreamInfo('VideoStream', 'Video', 1, self.default_fps,
                                      'float32', 'videouid34234')
                    self.video_outlet = StreamOutlet(info)
                print("VideoRecorder initialized successfully.")

            def signal_handler(self, sig, frame):
                print('Termination signal received. Releasing resources...')
                self.stop()
                sys.exit(0)

            def stop(self):
                self.stop_event.set()

            def release_resources(self):
                if self.cap:
                    self.cap.release()
                if self.out:
                    self.out.release()
                cv2.destroyAllWindows()

            def record_video(self):
                backend = cv2.CAP_DSHOW if platform.system() == 'Windows' else None
                self.cap = cv2.VideoCapture(self.cam_id, backend)
                fourcc = cv2.VideoWriter_fourcc(*'XVID')
                frame_width = int(self.cap.get(cv2.CAP_PROP_FRAME_WIDTH))
                frame_height = int(self.cap.get(cv2.CAP_PROP_FRAME_HEIGHT))
                self.out = cv2.VideoWriter(
                    self.output_path, fourcc, self.default_fps, (frame_width, frame_height))

                frame_number = 0
                try:
                    while self.cap.isOpened() and not self.stop_event.is_set():
                        ret, frame = self.cap.read()
                        if ret:
                            now = datetime.now()
                            timestamp = now.strftime("%Y-%m-%d %H:%M:%S.%f")
                            if self.video_outlet:
                                self.video_outlet.push_sample([frame_number])

                            colour = (0, 255, 0)
                            origin = (10, 30)
                            font = cv2.FONT_HERSHEY_SIMPLEX
                            scale = 1
                            thickness = 2

                            cv2.putText(frame, timestamp, origin,
                                        font, scale, colour, thickness)
                            self.out.write(frame)
                            frame_number += 1
                            if self.display_video:
                                cv2.imshow('frame', frame)

                            if cv2.waitKey(1) & 0xFF == ord('q'):
                                break
                        else:
                            break
                finally:
                    self.release_resources()

        class PPGRecorder:
            def __init__(self, port, baud_rate=115200, enable_lsl=True, simulate_data=False):
                self.port = port
                self.baud_rate = baud_rate
                self.enable_lsl = enable_lsl
                self.simulate_data = simulate_data
                self.ser = None
                self.stop_event = threading.Event()
                self.sample_rate = 50

                if self.enable_lsl:
                    info = StreamInfo('PPGStream', 'PPG', 1, self.sample_rate,
                                      'float32', 'ppguid34234')
                    self.ppg_outlet = StreamOutlet(info)

            def start(self):
                if self.simulate_data:
                    self.simulate_ppg_data()
                else:
                    try:
                        self.ser = serial.Serial(self.port, self.baud_rate, timeout=1)
                        time.sleep(2)  # Wait for the connection to be established
                        print(f"Successfully connected to {self.port}")

                        self.record_ppg()
                    except serial.SerialException as e:
                        print(f"Serial error: {e}")
                    except Exception as e:
                        print(f"An error occurred: {e}")

            def stop(self):
                self.stop_event.set()

            def record_ppg(self):
                while not self.stop_event.is_set():
                    signal = self.read_signal()
                    if signal:
                        timestamp = time.time()
                        datetime_str = datetime.fromtimestamp(
                            timestamp).strftime('%Y-%m-%d %H:%M:%S.%f')

                        if self.enable_lsl:
                            self.ppg_outlet.push_sample([float(signal)])
                    else:
                        print("No signal received.")

            def read_signal(self):
                try:
                    signal = self.ser.readline().decode('utf-8').strip()
                    split_signal = signal.split(" ")
                    value = None
                    if len(split_signal) == 2:
                        value = split_signal[1]
                    return value
                except Exception as e:
                    print(f"Error reading signal: {e}")
                    return None

            def simulate_ppg_data(self):
                print("Simulating PPG data. Press 'q' to stop.")
                while not self.stop_event.is_set():
                    signal = random.uniform(0.0, 1.0)  # Simulate a random PPG signal

                    if self.enable_lsl:
                        self.ppg_outlet.push_sample([signal])

                    time.sleep(0.02)  # Simulate a 50 Hz signal

            def release_resources(self):
                if self.ser and self.ser.is_open:
                    self.ser.close()
                    print(f"Closed connection to {self.port}")

        core.quit = custom_quit
        atexit.register(cleanup)
        marker_info = StreamInfo('HearingMarkerStream', 'Markers',
                                 1, 0, 'string', 'hearingid2023')

        config_file = open('config.yaml')
        yaml_config = yaml.safe_load(config_file)
        marker_outlet = StreamOutlet(marker_info)
      Begin Experiment:
        config_type = expInfo['config']
        enable_video = expInfo['enable_video'] == 'true'
        enable_ppg = expInfo['enable_ppg'] == 'true'
        exp_config = yaml_config[config_type]
        seed_id = int(expInfo['participant'])
        random.seed(seed_id)

        stim_root = os.path.join(os.getcwd(),"stimuli")
        # Pupil Muscular Test (PMT) variables
        pmt_prestim_duration = exp_config['pmt_prestim']
        pmt_stim_duration = exp_config['pmt_stim']
        pmt_poststim_duration = exp_config['pmt_poststim']
        pmt_trials = exp_config['pmt_trials']
        # Hearing Loudness Test (HLT) variables
        hlt_prestim_duration = exp_config['hlt_prestim']
        hlt_stim_duration = exp_config['hlt_stim']
        hlt_poststim_duration = exp_config['hlt_poststim']
        hlt_repeats = exp_config['hlt_trials']
        hlt_folder = os.path.join(stim_root,"hlt")
        hlt_stims = get_audio_files(hlt_folder)
        hlt_stims = hlt_stims * hlt_repeats
        hlt_trials = len(hlt_stims)
        hlt_idx = 0
        # Listening Effort Test (LET) variables
        let_prestim_duration = exp_config['let_prestim']
        let_stim_duration = exp_config['let_stim']
        let_poststim_duration = exp_config['let_poststim']
        let_repeats = exp_config['let_trials']
        let_folder = os.path.join(stim_root,"let")
        let_levels = get_let_levels(let_folder)
        num_levels = len(let_levels)
        let_loop = num_levels * let_repeats
        let_stims = []
        for i in range(let_loop):
            level = let_levels[i % num_levels]
            stim = random.choice(os.listdir(level))
            let_stims.append(os.path.join(level, stim))
        let_trials = len(let_stims)
        let_idx = 0
        #Aversion Sound Test (AST) variables
        ast_prestim_duration = exp_config['ast_prestim']
        ast_stim_duration = exp_config['ast_stim']
        ast_poststim_duration = exp_config['ast_poststim']
        ast_num_blocks = exp_config['ast_trials']
        ast_folder = os.path.join(stim_root,"ast")
        all_ast_files = get_audio_files(ast_folder)
        ast_aversive = [f for f in all_ast_files if 'control' not in os.path.basename(f)]
        ast_neutral = [f for f in all_ast_files if 'control' in os.path.basename(f)]
        ast_stims = []
        for _ in range(ast_num_blocks):
            block_aversive = random.sample(ast_aversive, min(3, len(ast_aversive)))
            block_neutral = random.sample(ast_neutral, min(2, len(ast_neutral)))
            block = block_aversive + block_neutral
            random.shuffle(block)
            ast_stims.extend(block)
        ast_trials = len(ast_stims)
        ast_idx = 0

        root_dir = os.path.join(os.getcwd(),"exp_data")
        participant_id = expInfo['participant']
        run = expInfo['run']
        task = yaml_config['task']

        print("creating additional modalitiy recorders: PPG and Video")
        global started_recording, lsl_socket, recorder, ppg_recorder, recording_thread, ppg_thread
        if enable_video:
            recorder = VideoRecorder(cam_id=0, output_name=participant_id, display_video=False, enable_lsl=True)
            recording_thread = threading.Thread(target=recorder.record_video)
        if enable_ppg:
            ppg_recorder = PPGRecorder(port="COM4", enable_lsl=True, simulate_data=False)
            ppg_thread = threading.Thread(target=ppg_recorder.start)

        lsl_socket = socket.create_connection(("localhost", 22345))
        if lsl_socket is not None:
            eeg_ok, eeg_msg = preflight_eeg_gate(win, stream_type="EEG")
            if not eeg_ok:
                original_quit()
            started_recording = True
            if recording_thread:
                recording_thread.start()
            if ppg_thread:
                ppg_thread.start()
            if enable_video:
                video_ok, video_msg = preflight_video_gate(win, name="VideoStream")
                if not video_ok:
                    original_quit()
            template_str = os.path.join("sub-%p","sub-%p_task-%b_run-%n.xdf")
            config_str = f'filename {{root:{root_dir}}} {{template:{template_str}}} {{run:{run}}} {{participant:{participant_id}}} {{task:{task}}}\n'
            print(config_str)

            lsl_socket.sendall(b"update\n")
            core.wait(1.5)
            lsl_socket.sendall(b"select all\n")
            lsl_socket.sendall(config_str.encode('utf-8'))
            lsl_socket.sendall(b"start\n")

            core.wait(5)

            # LabRecorder creates the sub-<pid> folder under root_dir the moment it
            # opens the XDF, so an empty or missing folder here means the 'start' above
            # did not take -- it ignored the filename command and is saving elsewhere,
            # or no streams were selected. Fail NOW: the old failure mode was a whole
            # session recorded with no EEG, surfacing only when save_responses() crashed
            # at the very end writing into the folder LabRecorder never created.
            sub_dir = os.path.join(root_dir, f"sub-{participant_id}")
            xdfs = [f for f in os.listdir(sub_dir) if f.endswith(".xdf")] if os.path.isdir(sub_dir) else []
            from psychopy import logging as _psylog
            if not xdfs:
                msg = ("LabRecorder did NOT start recording -- no .xdf in " + sub_dir +
                       ". Check LabRecorder's save path and that its streams are selected.")
                print("[preflight] " + msg)
                _psylog.error(msg)
                _psylog.flush()
                lsl_socket.sendall(b"stop\n")
                original_quit()
            msg = "LabRecorder recording to " + os.path.join(sub_dir, xdfs[0])
            print("[preflight] " + msg)
            _psylog.info(msg)
            _psylog.flush()
      Begin Routine:
        marker_outlet.push_sample(["start"])
      End Experiment:
        if not end_exp:
            marker_outlet.push_sample(["end"])
            core.wait(1)
            lsl_socket.sendall(b"stop\n")
            end_exp = True
    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        Please focus only on the cross area on the screen.

        Use your right hand to hold the mouse, as you will need it shortly.

        In experiment 1, the screen color will change. No response is required from you.

        When you are ready, click the left mouse button to start the experiment.
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine rest
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    CodeComponent code_rest
      Code Type = Py
      Begin Routine:
        marker_outlet.push_sample(["rest"])
        rest_duration = random.randint(rest_range[0],rest_range[1])
        if sound_idx < len(sound_files)-1:
            sound_idx+=1
        else:
            sound_idx = 0
    PolygonComponent cross_4
      fillColor = white
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $rest_duration
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  Routine pre_stim
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        name = sound_files[sound_idx]
        marker_outlet.push_sample([f"pre-stim-{name}"])
        sound_path = os.path.join('sounds', f"{name}.wav")
    PolygonComponent cross
      fillColor = white
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $pre_stim
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  Routine stim
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    CodeComponent pupil_code
      Code Type = Py
      Begin Routine:
        current_sound.setSound(sound_path, hamming=True)
        marker_outlet.push_sample([f"ast_stim-{name}"])
        sound_duration = current_sound.getDuration()
        print(f'{name}: {sound_duration}')
        print(ast_idx)
        if ast_idx < len(ast_stims)-1:
            ast_idx+=1
        else:
            ast_idx = 0
    SoundComponent current_sound
      sound [set every repeat] = $sound_path
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ast_stim_duration
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    TextComponent text_3
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ast_stim_duration
      text [set every repeat] = $name
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    PolygonComponent cross_14
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      saveStartStop = False
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = ast_stim_duration
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  Routine post_stim
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    CodeComponent code_increment
      Code Type = Py
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      Begin Routine:
        marker_outlet.push_sample([f"ast_poststim-{name}"])
    PolygonComponent black_screen_10
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      saveStartStop = False
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ast_poststim_duration
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    PolygonComponent cross_15
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      saveStartStop = False
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ast_poststim_duration
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  Routine baseline
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    CodeComponent code_baseline
      Code Type = Py
      Begin Routine:
        print("sending baseline")
        marker_outlet.push_sample(["baseline"])
    PolygonComponent cross_3
      fillColor = white
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $baseline_duration
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  Routine end
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        print("sending end")
        marker_outlet.push_sample(["end"])
        if started_recording:
            lsl_socket.sendall(b"stop\n")
            started_recording = False
  Routine hlt_prestim
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    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        sound_path = hlt_stims[hlt_idx]
        name = os.path.basename(sound_path).split('.')[0]
        marker_outlet.push_sample([f"hlt_prestim-{name}"])
        thisExp.addData("current_hlt_stim",name)
    PolygonComponent black_screen_3
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      saveStartStop = False
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $hlt_prestim_duration
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    PolygonComponent cross_2
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      saveStartStop = False
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $hlt_prestim_duration
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  Routine hlt_stim
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    CodeComponent code_7
      Code Type = Py
      Begin Routine:
        hlt_sound.setSound(sound_path, hamming=True)
        marker_outlet.push_sample([f"hlt_stim-{name}"])
        sound_duration = hlt_sound.getDuration()
        print(f'{name}: {sound_duration}')
        if hlt_idx < len(hlt_stims)-1:
            hlt_idx+=1
        else:
            hlt_idx = 0
    SoundComponent hlt_sound
      sound [set every repeat] = $sound_path
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $hlt_stim_duration
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    PolygonComponent black_screen_4
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      saveStartStop = False
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $hlt_stim_duration
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    TextComponent text_5
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $hlt_stim_duration
      text [set every repeat] = $name
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    PolygonComponent cross_5
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      saveStartStop = False
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $hlt_stim_duration
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  Routine hlt_poststim
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    CodeComponent code_8
      Code Type = Py
      Begin Routine:
        marker_outlet.push_sample([f"hlt_poststim-{name}"])
    PolygonComponent black_screen_5
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      saveStartStop = False
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $hlt_poststim_duration
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    PolygonComponent cross_6
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      saveStartStop = False
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $hlt_poststim_duration
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  Routine let_prestim
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    CodeComponent code_10
      Code Type = Py
      Begin Routine:
        sound_path = let_stims[let_idx]
        name = os.path.basename(sound_path).split('.')[0]
        let_level = os.path.basename(os.path.dirname(sound_path))
        marker_outlet.push_sample([f"let_prestim-{name}"])
        thisExp.addData("current_let_stim",name)
        thisExp.addData("current_let_level",let_level)
    PolygonComponent black_screen_6
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      saveStartStop = False
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $let_prestim_duration
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    PolygonComponent cross_10
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      saveStartStop = False
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $let_prestim_duration
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  Routine let_stim
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    CodeComponent code_11
      Code Type = Py
      Begin Routine:
        let_sound.setSound(sound_path, hamming=True)
        marker_outlet.push_sample([f"let_stim-{name}"])
        sound_duration = let_sound.getDuration()
        print(f'{name}: {sound_duration}')
        if let_idx < len(let_stims)-1:
            let_idx+=1
        else:
            let_idx = 0
    SoundComponent let_sound
      sound [set every repeat] = $sound_path
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $let_stim_duration
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    PolygonComponent black_screen_7
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      saveStartStop = False
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $let_stim_duration
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    TextComponent text_4
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $let_stim_duration
      text [set every repeat] = $name
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    PolygonComponent cross_11
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      saveStartStop = False
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $let_stim_duration
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  Routine let_poststim
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    CodeComponent code_12
      Code Type = Py
      Begin Routine:
        marker_outlet.push_sample([f"let_poststim-{name}"])
    PolygonComponent black_screen_8
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      saveStartStop = False
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $let_poststim_duration
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    PolygonComponent cross_12
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      saveStartStop = False
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $let_poststim_duration
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  Routine pmt_prestim
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    CodeComponent pmt_code
      Code Type = Py
      Begin Routine:
        marker_outlet.push_sample(["pmt_prestim"])
    PolygonComponent black_screen
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      saveStartStop = False
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $pmt_prestim_duration
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    PolygonComponent cross_7
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $pmt_prestim_duration
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  Routine pmt_stim
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    CodeComponent code_4
      Code Type = Py
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      Begin Routine:
        marker_outlet.push_sample(["pmt_stim"])
    PolygonComponent gray_screen
      fillColor = white
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $pmt_stim_duration
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    PolygonComponent cross_8
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $pmt_stim_duration
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  Routine pmt_poststim
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    CodeComponent code_5
      Code Type = Py
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      Begin Routine:
        marker_outlet.push_sample(["pmt_poststim"])
    PolygonComponent black_screen_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      saveStartStop = False
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $pmt_poststim_duration
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    PolygonComponent cross_9
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $pmt_poststim_duration
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  Routine hlt_response
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    CodeComponent code_9
      Code Type = Py
      Begin Routine:
        marker_outlet.push_sample([f"hlt_response-{name}"])
    SliderComponent slider_4
      forceEndRoutine = True
      granularity = 1
      labels = ('0\nCannot\nhear', '1', '2', '3', '4', '5\nClearly\naudible', '6', '7', '8', '9', '10\nExtremely\nuncomfortable')
      letterHeight = 0.02
      saveStartStop = False
      size = (1.6, 0.1)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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  Routine let_response
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    CodeComponent code_13
      Code Type = Py
      Begin Routine:
        marker_outlet.push_sample([f"let_response-{name}"])
    SliderComponent slider_5
      forceEndRoutine = True
      granularity = 0
      labels = ("Unclear", 1, 2, 3, 4, 5, 6)
      letterHeight = 0.03
      pos = (0, 0.3)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent slider_6
      forceEndRoutine = True
      granularity = 0
      labels = (7, 8, 9, 10, 11, 12, 13)
      letterHeight = 0.05
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent slider_7
      forceEndRoutine = True
      granularity = 0
      labels = (14, 15, 16, 17, 18, 19, 20)
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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  Routine ast_prestim
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        sound_path = ast_stims[ast_idx]
        name = os.path.basename(sound_path).split('.')[0]
        ast_type = 'neutral' if 'control' in name else 'aversive'
        marker_outlet.push_sample([f"ast_prestim-{name}"])
        thisExp.addData("current_ast_stim",name)
        thisExp.addData("current_ast_type",ast_type)
    PolygonComponent black_screen_9
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      saveStartStop = False
      shape = rectangle
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ast_prestim_duration
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    PolygonComponent cross_13
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = 0.0039, 0.0039, 0.0039
      saveStartStop = False
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ast_prestim_duration
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  Routine hlt_welcome
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In Experiment 2,

        We will play a pure-tone sound, gradually increasing the loudness.

        After each sound, please rate it on a scale from 0 to 10:

        0: Cannot hear
        5: Clearly Audible
        10: Extremely uncomfortable

        Use the left mouse button to select your rating. When you are ready, click the left mouse button to start.
    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine let_welcome
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In Experiment 3,

        A voice will speak random numbers from 1 to 20.

        Each time you hear a number, click the left mouse button to select the corresponding number on the screen.

        When you are ready, click the left mouse button to start
    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine ast_welcome
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    TextComponent text_7
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In Experiment 4,

        We will play some sounds. After each sound, please rate how it made you feel on a scale from 0 to 10:

        0: Pleasant
        5: Neutral
        10: Very Unpleasant

        Use the left mouse button to select your rating. When you are ready, click the left mouse button to start.
    MouseComponent mouse_4
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine ast_response
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    CodeComponent code_ast_response
      Code Type = Py
      Begin Routine:
        marker_outlet.push_sample([f"ast_response-{name}"])
    SliderComponent slider_ast
      forceEndRoutine = True
      granularity = 1
      labels = ('0\nPleasant', '1', '2', '3', '4', '5\nNeutral', '6', '7', '8', '9', '10\nVery\nunpleasant')
      letterHeight = 0.02
      saveStartStop = False
      size = (1.6, 0.1)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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  Routine end_2
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    CodeComponent code_14
      Code Type = Py
      Begin Routine:
        global end_exp
        if not end_exp:
            marker_outlet.push_sample(["end"])
            core.wait(1)
            lsl_socket.sendall(b"stop\n")
            end_exp = True
    TextComponent text_end
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        The experiment has ended, thank you for participating!

        Click the left mouse button to exit and notify the research staff.
    MouseComponent mouse_5
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  LoopInitiator trials_pmt loopType="TrialHandler"
    loopType = sequential
    nReps = pmt_trials
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    Routine pmt_prestim
    Routine pmt_stim
    Routine pmt_poststim
  LoopTerminator trials_pmt
  Routine hlt_welcome
  LoopInitiator trials_hlt loopType="TrialHandler"
    loopType = sequential
    nReps = hlt_trials
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    Routine hlt_prestim
    Routine hlt_stim
    Routine hlt_poststim
    Routine hlt_response
  LoopTerminator trials_hlt
  Routine let_welcome
  LoopInitiator trials_let loopType="TrialHandler"
    loopType = random
    nReps = let_trials
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    Routine let_prestim
    Routine let_stim
    Routine let_poststim
    Routine let_response
  LoopTerminator trials_let
  Routine ast_welcome
  LoopInitiator trials_ast loopType="TrialHandler"
    loopType = sequential
    nReps = ast_trials
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    Routine ast_prestim
    Routine stim
    Routine post_stim
    Routine ast_response
  LoopTerminator trials_ast
  Routine end_2
